// This CellML file was generated on 05/07/2005 at 16:16:33 using:
//
// COR (0.9.31.77)
// Copyright 2002-2005 Oxford Cardiac Electrophysiology Group
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// modification: W3CDTF 2006-03-31; added metadata; Given Peter; Family Villiger; Other J
// created: W3CDTF 2005-07-05
// creator: Orgname Oxford University; Orgunit unknown; penny.noble@physiol.ox.ac.uk; Given Penny; Family Noble; Other unknown
// reference: Given D; Family Noble; Given S; Family Noble; Other J; title A Model of Sino-Atrial Node Electrical Activity Based on a Modification of the DiFrancesco-Noble (1984) Equations; volume 222; first_page 295; title Proceedings of the Royal Society of London. Series B, Biological Sciences; W3CDTF 1984-09-22; last_page 304
def model noble_noble_1984_version02 as
  // Noble-Noble Model Of Sino-Atrial Node Electrical Activity, 1984
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This is the original version of the model imported from the previous CellML model repository, 24-Jan-2006. Version 02 is known to run in PCEnv.
  //
  // Model Structure
  //
  // In 1984 D. Noble and S.J. Noble published a mathematical model which describes electrical activity in the sino-atrial node (see below). Their model is based on the Purkinje fibre model developed by D. DiFrancesco and D. Noble (see The DiFrancesco-Noble Purkinje Fibre Model, 1985 (${HTML_EXMPL_DFN_MODEL})). Most of the equations of this cardiac cell model remain unchanged. However, based on the results of experimental work, where necessary, certain parameters have been modified in order to make the model appropriate to a sino-atrial node.
  //
  // The complete original paper reference is cited below:
  //
  // A Model of Sino-Atrial Node Electrical Activity Based on a Modification of the DiFrancesco-Noble (1984) Equations, D. Noble and S.J. Noble, Proceedings of the Royal Society of London. Series B, Biological Sciences (http://www.pubs.royalsoc.ac.uk/proc_bio/proc_bio.html), 222, 295-304. (The full text (http://links.jstor.org/sici?sici=0080-4649%2819840922%29222%3A1228%3C295%3AAMOSNE%3E2.0.CO%3B2-P) of the article is available to members on the JSTOR website.) PubMed ID: 6149553 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=6149553&dopt=Abstract)
  //
  // The raw CellML description of the Noble-Noble sino-atrial node model can be downloaded in various formats as described in . For an example of a more complete documentation for an electrophysiological model, see The Hodgkin-Huxley Squid Axon Model, 1952 (${HTML_EXMPL_HHSA_INTRO}).
  //
  // cell diagram of the NN SAN model showing ionic currents, pumps and exchangers within the sarcolemma and the sarcoplasmic reticulum
  //
  // A schematic diagram describing the current flows across the cell membrane that are captured in the NN SAN model.
  //
  // the cellml rendering of the NN SAN model
  //
  // The network defined in the CellML description of the Noble-Noble SAN model. For simplicity, not all the variables are shown.
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_millivolt as
    unit volt {pref: milli, expo: -1};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microF as
    unit farad {pref: micro};
  enddef;
  def unit nanoamp as
    unit ampere {pref: nano};
  enddef;
  def unit concentration_units as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit millijoule_per_mole_kelvin as
    unit joule {pref: milli};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit microlitre as
    unit litre {pref: micro};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp membrane as
    var V: millivolt {pub: out, init: -60};
    var R: millijoule_per_mole_kelvin {pub: out, init: 8314.472};
    var T: kelvin {pub: out, init: 310};
    var F: coulomb_per_mole {pub: out, init: 96485.3415};
    var C: microF {init: 0.006};
    var RTONF: millivolt {pub: out};
    var time: second {pub: in};
    var i_f: nanoamp {pub: in};
    var i_K: nanoamp {pub: in};
    var i_K1: nanoamp {pub: in};
    var i_Na_b: nanoamp {pub: in};
    var i_Ca_b: nanoamp {pub: in};
    var i_p: nanoamp {pub: in};
    var i_NaCa: nanoamp {pub: in};
    var i_Na: nanoamp {pub: in};
    var i_si: nanoamp {pub: in};
    RTONF = R*T/F;
    ode(V, time) = -1{dimensionless}*(i_f+i_K+i_K1+i_Na_b+i_Ca_b+i_p+i_NaCa+i_Na+i_si)/C;
  enddef;

  def comp hyperpolarising_activated_current as
    var i_f: nanoamp {pub: out};
    var i_fNa: nanoamp {pub: out};
    var E_Na: millivolt {pub: out};
    var E_K: millivolt {pub: out};
    var i_fK: nanoamp {pub: out};
    var g_f_Na: microS {init: 6};
    var g_f_K: microS {init: 6};
    var Km_f: concentration_units {init: 45};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Kc: concentration_units {pub: in};
    var Ki: concentration_units {pub: in};
    var Nai: concentration_units {pub: in};
    var Nao: concentration_units {pub: in};
    var y: dimensionless {priv: in};
    E_Na = R*T/F*ln(Nao/Nai);
    E_K = R*T/F*ln(Kc/Ki);
    i_fNa = y*Kc/(Kc+Km_f)*g_f_Na*(V-E_Na);
    i_fK = y*Kc/(Kc+Km_f)*g_f_K*(V-E_K);
    i_f = i_fNa+i_fK;
  enddef;

  def comp hyperpolarising_activated_current_y_gate as
    var y: dimensionless {pub: out, init: 0.007};
    var alpha_y: per_second;
    var beta_y: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var delta_y: dimensionless {init: 1e-5};
    var E0_y: millivolt;
    var speed_y: dimensionless {init: 2};
    E0_y = V+52{millivolt};
    alpha_y = 0.05{per_second}*exp(-0.067{per_millivolt}*E0_y);
    beta_y = sel
      case abs(E0_y) < delta_y*1{millivolt}:
        2.5{per_second};
      otherwise:
        E0_y*1{per_millivolt_second}/(1{dimensionless}-exp(-0.2{per_millivolt}*E0_y));
    endsel;
    ode(y, time) = speed_y*(alpha_y*(1{dimensionless}-y)-beta_y*y);
  enddef;

  def comp time_dependent_potassium_current as
    var i_K: nanoamp {pub: out};
    var I_K: nanoamp;
    var i_K_max: nanoamp {init: 20};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var RTONF: millivolt {pub: in};
    var Ki: concentration_units {pub: in};
    var Kc: concentration_units {pub: in};
    var x: dimensionless {priv: in};
    I_K = i_K_max*(Ki-Kc*exp(-V/RTONF))/140{concentration_units};
    i_K = x*I_K;
  enddef;

  def comp time_dependent_potassium_current_x_gate as
    var x: dimensionless {pub: out, init: 0.54};
    var alpha_x: per_second;
    var beta_x: per_second;
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var delta_x: dimensionless {init: 0.0001};
    var E0_x: millivolt;
    E0_x = V+22{millivolt};
    alpha_x = sel
      case abs(E0_x) < delta_x*1{millivolt}:
        2.5{per_second};
      otherwise:
        0.5{per_millivolt_second}*E0_x/(1{dimensionless}-exp(-E0_x/5{millivolt}));
    endsel;
    beta_x = sel
      case abs(E0_x) < delta_x*1{millivolt}:
        2.5{per_second};
      otherwise:
        0.178{per_millivolt_second}*E0_x/(exp(E0_x/15{millivolt})-1{dimensionless});
    endsel;
    ode(x, time) = alpha_x*(1{dimensionless}-x)-beta_x*x;
  enddef;

  def comp time_independent_potassium_current as
    var i_K1: nanoamp {pub: out};
    var g_K1: microS {init: 0.75};
    var Km_K1: concentration_units {init: 10};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var E_K: millivolt {pub: in};
    var Kc: concentration_units {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    i_K1 = g_K1*Kc/(Kc+Km_K1)*(V-E_K)/(1{dimensionless}+exp((V+10{millivolt}-E_K)*F*2{dimensionless}/(R*T)));
  enddef;

  def comp sodium_background_current as
    var i_Na_b: nanoamp {pub: out};
    var g_Nab: microS {init: 0.07};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var E_Na: millivolt {pub: in};
    i_Na_b = g_Nab*(V-E_Na);
  enddef;

  def comp calcium_background_current as
    var i_Ca_b: nanoamp {pub: out};
    var E_Ca: millivolt {pub: out};
    var g_Cab: microS {init: 0.01};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cai: concentration_units {pub: in};
    var Cao: concentration_units {pub: in};
    E_Ca = 0.5{dimensionless}*R*T/F*ln(Cao/Cai);
    i_Ca_b = g_Cab*(V-E_Ca);
  enddef;

  def comp sodium_potassium_pump as
    var i_p: nanoamp {pub: out};
    var I_p: nanoamp {init: 50};
    var K_mK: concentration_units {init: 1};
    var K_mNa: concentration_units {init: 40};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var Nai: concentration_units {pub: in};
    var Kc: concentration_units {pub: in};
    i_p = I_p*Kc/(K_mK+Kc)*Nai/(K_mNa+Nai);
  enddef;

  def comp Na_Ca_exchanger as
    var i_NaCa: nanoamp {pub: out};
    var n_NaCa: dimensionless {pub: out, init: 3};
    var K_NaCa: dimensionless {init: 0.002};
    var d_NaCa: dimensionless {init: 0.0001};
    var gamma: dimensionless {init: 0.5};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Cao: concentration_units {pub: in};
    var Cai: concentration_units {pub: in};
    var Nai: concentration_units {pub: in};
    var Nao: concentration_units {pub: in};
    i_NaCa = K_NaCa*(exp(gamma*(n_NaCa-2{dimensionless})*V*F/(R*T))*pow(Nai, n_NaCa)*Cao-exp((gamma-1{dimensionless})*(n_NaCa-2{dimensionless})*V*F/(R*T))*pow(Nao, n_NaCa)*Cai)/((1{dimensionless}+d_NaCa*(Cai*pow(Nao, n_NaCa)+Cao*pow(Nai, n_NaCa)))*(1{dimensionless}+Cai/0.0069{concentration_units}));
  enddef;

  def comp fast_sodium_current as
    var i_Na: nanoamp {pub: out};
    var g_Na: microS {init: 1.25};
    var E_mh: millivolt;
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Nao: concentration_units {pub: in};
    var Nai: concentration_units {pub: in};
    var Kc: concentration_units {pub: in};
    var Ki: concentration_units {pub: in};
    var m: dimensionless {priv: in};
    var h: dimensionless {priv: in};
    E_mh = R*T/F*ln((Nao+0.12{dimensionless}*Kc)/(Nai+0.12{dimensionless}*Ki));
    i_Na = g_Na*pow(m, 3{dimensionless})*h*(V-E_mh);
  enddef;

  def comp fast_sodium_current_m_gate as
    var m: dimensionless {pub: out, init: 0.076};
    var alpha_m: per_second;
    var beta_m: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var delta_m: dimensionless {init: 1e-5};
    var E0_m: millivolt;
    E0_m = V+41{millivolt};
    alpha_m = sel
      case abs(E0_m) < delta_m:
        2000{per_second};
      otherwise:
        200{per_millivolt_second}*E0_m/(1{dimensionless}-exp(-0.1{dimensionless}*E0_m));
    endsel;
    beta_m = 8000{per_second}*exp(-0.056{dimensionless}*(V+66{millivolt}));
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp fast_sodium_current_h_gate as
    var h: dimensionless {pub: out, init: 0.015};
    var alpha_h: per_second;
    var beta_h: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h = 20{per_second}*exp(-0.125{dimensionless}*(V+75{millivolt}));
    beta_h = 2000{per_second}/(320{dimensionless}*exp(-0.1{dimensionless}*(V+75{millivolt}))+1{dimensionless});
    ode(h, time) = alpha_h*(1{dimensionless}-h)-beta_h*h;
  enddef;

  def comp second_inward_current as
    var i_si: nanoamp {pub: out};
    var i_siCa: nanoamp {pub: out};
    var i_siK: nanoamp {pub: out};
    var i_siNa: nanoamp {pub: out};
    var P_si: dimensionless {init: 7.5};
    var time: second {pub: in, priv: out};
    var V: millivolt {pub: in, priv: out};
    var R: millijoule_per_mole_kelvin {pub: in};
    var T: kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var Nao: concentration_units {pub: in};
    var Nai: concentration_units {pub: in};
    var Kc: concentration_units {pub: in};
    var Ki: concentration_units {pub: in};
    var Cao: concentration_units {pub: in};
    var Cai: concentration_units {pub: in, priv: out};
    var d: dimensionless {priv: in};
    var f: dimensionless {priv: in};
    var f2: dimensionless {priv: in};
    i_siCa = 4{dimensionless}*P_si*(V-50{millivolt})*F/(R*T*(1{dimensionless}-exp(-1{dimensionless}*(V-50{millivolt})*F*2{dimensionless}/(R*T))))*(Cai*exp(100{dimensionless}*F/(R*T))-Cao*exp(-2{dimensionless}*(V-50{millivolt})*F/(R*T)))*d*f*f2;
    i_siK = 0.01{dimensionless}*P_si*(V-50{millivolt})*F/(R*T*(1{dimensionless}-exp(-1{dimensionless}*(V-50{millivolt})*F/(R*T))))*(Ki*exp(50{dimensionless}*F/(R*T))-Kc*exp(-1{dimensionless}*(V-50{millivolt})*F/(R*T)))*d*f*f2;
    i_siNa = 0.01{dimensionless}*P_si*(V-50{millivolt})*F/(R*T*(1{dimensionless}-exp(-1{dimensionless}*(V-50{millivolt})*F/(R*T))))*(Nai*exp(50{dimensionless}*F/(R*T))-Nao*exp(-1{dimensionless}*(V-50{millivolt})*F/(R*T)))*d*f*f2;
    i_si = i_siCa+i_siK+i_siNa;
  enddef;

  def comp second_inward_current_d_gate as
    var d: dimensionless {pub: out, init: 0.0011};
    var alpha_d: per_second;
    var beta_d: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var delta_d: dimensionless {init: 0.0001};
    var E0_d: millivolt;
    E0_d = V+24{millivolt}-5{millivolt};
    alpha_d = sel
      case abs(E0_d) < delta_d:
        120{per_second};
      otherwise:
        30{per_millivolt_second}*E0_d/(1{dimensionless}-exp(-1{dimensionless}*E0_d/4{millivolt}));
    endsel;
    beta_d = sel
      case abs(E0_d) < delta_d:
        120{per_second};
      otherwise:
        12{per_millivolt_second}*E0_d/(exp(E0_d/10{millivolt})-1{dimensionless});
    endsel;
    ode(d, time) = alpha_d*(1{dimensionless}-d)-beta_d*d;
  enddef;

  def comp second_inward_current_f_gate as
    var f: dimensionless {pub: out, init: 0.785};
    var alpha_f: per_second;
    var beta_f: per_second;
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var delta_f: dimensionless {init: 0.0001};
    var E0_f: millivolt;
    E0_f = V+34{millivolt};
    alpha_f = sel
      case abs(E0_f) < delta_f:
        25{per_second};
      otherwise:
        6.25{per_millivolt_second}*E0_f/(exp(E0_f/4{millivolt})-1{dimensionless});
    endsel;
    beta_f = 50{per_second}/(1{dimensionless}+exp(-1{dimensionless}*(V+34{millivolt})/4{millivolt}));
    ode(f, time) = alpha_f*(1{dimensionless}-f)-beta_f*f;
  enddef;

  def comp second_inward_current_f2_gate as
    var f2: dimensionless {pub: out, init: 0.785};
    var alpha_f2: per_second {init: 10};
    var beta_f2: per_second;
    var K_mf2: concentration_units {init: 0.0005};
    var V: millivolt {pub: in};
    var time: second {pub: in};
    var Cai: concentration_units {pub: in};
    beta_f2 = Cai*alpha_f2/K_mf2;
    ode(f2, time) = alpha_f2-f2*(alpha_f2+beta_f2);
  enddef;

  def comp extracellular_sodium_concentration as
    var Nao: concentration_units {pub: out, init: 140};
  enddef;

  def comp intracellular_sodium_concentration as
    var Nai: concentration_units {pub: out, init: 7.5};
    var radius: micrometre {init: 80};
    var length: micrometre {init: 80};
    var V_e_ratio: dimensionless {init: 0.1};
    var V_Cell: microlitre;
    var Vi: microlitre {pub: out};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Na: nanoamp {pub: in};
    var i_Na_b: nanoamp {pub: in};
    var i_siNa: nanoamp {pub: in};
    var i_p: nanoamp {pub: in};
    var i_fNa: nanoamp {pub: in};
    var i_NaCa: nanoamp {pub: in};
    var n_NaCa: dimensionless {pub: in};
    V_Cell = 3.141592654{dimensionless}*sqr(radius/1000{dimensionless})*length/1000{dimensionless};
    Vi = V_Cell*(1{dimensionless}-V_e_ratio);
    ode(Nai, time) = -(i_Na+i_Na_b+i_fNa+i_siNa+i_p*3{dimensionless}+i_NaCa*n_NaCa/(n_NaCa-2{dimensionless}))/(Vi*F);
  enddef;

  def comp extracellular_calcium_concentration as
    var Cao: concentration_units {pub: out, init: 2};
  enddef;

  def comp intracellular_calcium_concentration as
    var Cai: concentration_units {pub: out, init: 5.8e-5};
    var V_up: microlitre;
    var V_rel: microlitre;
    var Vi: microlitre {pub: in};
    var i_up: nanoamp;
    var i_tr: nanoamp;
    var i_rel: nanoamp;
    var alpha_up: per_second;
    var alpha_tr: per_second;
    var alpha_rel: per_second;
    var Ca_up: concentration_units {init: 1.98};
    var Ca_rel: concentration_units {init: 0.55};
    var Ca_up_max: concentration_units {init: 5};
    var K_mCa: concentration_units {init: 0.002};
    var p: dimensionless {init: 0.785};
    var alpha_p: per_second;
    var beta_p: per_second;
    var E0_p: millivolt;
    var tau_up: second {init: 0.005};
    var tau_rep: second {init: 0.2};
    var tau_rel: second {init: 0.01};
    var rCa: dimensionless {init: 2};
    var time: second {pub: in};
    var V: millivolt {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_Ca_b: nanoamp {pub: in};
    var i_siCa: nanoamp {pub: in};
    var i_NaCa: nanoamp {pub: in};
    var n_NaCa: dimensionless {pub: in};
    i_up = alpha_up*Cai*(Ca_up_max-Ca_up);
    alpha_up = 2{dimensionless}*Vi*F/(tau_up*Ca_up_max);
    i_tr = alpha_tr*p*(Ca_up-Ca_rel);
    alpha_tr = 2{dimensionless}*V_rel*F/tau_rep;
    E0_p = V+34{millivolt}-(-30{millivolt});
    alpha_p = 0.625{per_millivolt_second}*E0_p/(exp(E0_p/4{millivolt})-1{dimensionless});
    beta_p = 5{per_second}/(1{dimensionless}+exp(-1{dimensionless}*E0_p/4{millivolt}));
    i_rel = alpha_rel*Ca_rel*pow(Cai, rCa)/(pow(Cai, rCa)+pow(K_mCa, rCa));
    alpha_rel = 2{dimensionless}*V_rel*F/tau_rel;
    ode(p, time) = alpha_p*(1{dimensionless}-p)-beta_p*p;
    ode(Ca_up, time) = (i_up-i_tr)/(2{dimensionless}*V_up*F);
    V_up = Vi*0.05{dimensionless};
    ode(Ca_rel, time) = (i_tr-i_rel)/(2{dimensionless}*V_rel*F);
    V_rel = Vi*0.02{dimensionless};
    ode(Cai, time) = -(i_siCa+i_Ca_b-2{dimensionless}*i_NaCa/(n_NaCa-2{dimensionless})-i_rel+i_up)/(2{dimensionless}*Vi*F);
  enddef;

  def comp extracellular_potassium_concentration as
    var Kc: concentration_units {pub: out, init: 3};
    var V_e: microlitre {init: 0.00016077};
    var Kb: concentration_units {init: 3};
    var i_mK: nanoamp {pub: out};
    var pf: per_second {init: 1};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    var i_K1: nanoamp {pub: in};
    var i_K: nanoamp {pub: in};
    var i_fK: nanoamp {pub: in};
    var i_siK: nanoamp {pub: in};
    var i_p: nanoamp {pub: in};
    i_mK = i_K1+i_K+i_fK+i_siK-2{dimensionless}*i_p;
    ode(Kc, time) = -pf*(Kc-Kb)+i_mK/(V_e*F);
  enddef;

  def comp intracellular_potassium_concentration as
    var Ki: concentration_units {pub: out, init: 140};
    var Vi: microlitre {pub: in};
    var i_mK: nanoamp {pub: in};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    ode(Ki, time) = -i_mK/(Vi*F);
  enddef;

  def group as containment for
    comp membrane incl
      comp hyperpolarising_activated_current incl
        comp hyperpolarising_activated_current_y_gate;
      endcomp;
      comp time_dependent_potassium_current incl
        comp time_dependent_potassium_current_x_gate;
      endcomp;
      comp time_independent_potassium_current;
      comp sodium_background_current;
      comp calcium_background_current;
      comp sodium_potassium_pump;
      comp Na_Ca_exchanger;
      comp fast_sodium_current incl
        comp fast_sodium_current_m_gate;
        comp fast_sodium_current_h_gate;
      endcomp;
      comp second_inward_current incl
        comp second_inward_current_d_gate;
        comp second_inward_current_f_gate;
        comp second_inward_current_f2_gate;
      endcomp;
      comp intracellular_sodium_concentration;
      comp extracellular_sodium_concentration;
      comp intracellular_calcium_concentration;
      comp extracellular_calcium_concentration;
      comp extracellular_potassium_concentration;
      comp intracellular_potassium_concentration;
    endcomp;
  enddef;

  def group as encapsulation for
    comp hyperpolarising_activated_current incl
      comp hyperpolarising_activated_current_y_gate;
    endcomp;
    comp time_dependent_potassium_current incl
      comp time_dependent_potassium_current_x_gate;
    endcomp;
    comp fast_sodium_current incl
      comp fast_sodium_current_m_gate;
      comp fast_sodium_current_h_gate;
    endcomp;
    comp second_inward_current incl
      comp second_inward_current_d_gate;
      comp second_inward_current_f_gate;
      comp second_inward_current_f2_gate;
    endcomp;
  enddef;
  def map between membrane and environment for
    vars time and time;
  enddef;
  def map between hyperpolarising_activated_current and environment for
    vars time and time;
  enddef;
  def map between time_dependent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between time_independent_potassium_current and environment for
    vars time and time;
  enddef;
  def map between sodium_background_current and environment for
    vars time and time;
  enddef;
  def map between calcium_background_current and environment for
    vars time and time;
  enddef;
  def map between sodium_potassium_pump and environment for
    vars time and time;
  enddef;
  def map between Na_Ca_exchanger and environment for
    vars time and time;
  enddef;
  def map between fast_sodium_current and environment for
    vars time and time;
  enddef;
  def map between second_inward_current and environment for
    vars time and time;
  enddef;
  def map between intracellular_sodium_concentration and environment for
    vars time and time;
  enddef;
  def map between intracellular_calcium_concentration and environment for
    vars time and time;
  enddef;
  def map between extracellular_potassium_concentration and environment for
    vars time and time;
  enddef;
  def map between intracellular_potassium_concentration and environment for
    vars time and time;
  enddef;
  def map between hyperpolarising_activated_current and membrane for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_f and i_f;
  enddef;
  def map between time_dependent_potassium_current and membrane for
    vars V and V;
    vars i_K and i_K;
    vars RTONF and RTONF;
  enddef;
  def map between time_independent_potassium_current and membrane for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_K1 and i_K1;
  enddef;
  def map between sodium_background_current and membrane for
    vars V and V;
    vars i_Na_b and i_Na_b;
  enddef;
  def map between calcium_background_current and membrane for
    vars V and V;
    vars R and R;
    vars T and T;
    vars F and F;
    vars i_Ca_b and i_Ca_b;
  enddef;
  def map between sodium_potassium_pump and membrane for
    vars V and V;
    vars i_p and i_p;
  enddef;
  def map between Na_Ca_exchanger and membrane for
    vars V and V;
    vars i_NaCa and i_NaCa;
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between fast_sodium_current and membrane for
    vars V and V;
    vars i_Na and i_Na;
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between second_inward_current and membrane for
    vars V and V;
    vars i_si and i_si;
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between intracellular_sodium_concentration and membrane for
    vars F and F;
  enddef;
  def map between intracellular_calcium_concentration and membrane for
    vars V and V;
    vars F and F;
  enddef;
  def map between extracellular_potassium_concentration and membrane for
    vars F and F;
  enddef;
  def map between intracellular_potassium_concentration and membrane for
    vars F and F;
  enddef;
  def map between hyperpolarising_activated_current and extracellular_potassium_concentration for
    vars Kc and Kc;
    vars i_fK and i_fK;
  enddef;
  def map between hyperpolarising_activated_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between hyperpolarising_activated_current and time_independent_potassium_current for
    vars E_K and E_K;
  enddef;
  def map between hyperpolarising_activated_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between hyperpolarising_activated_current and intracellular_sodium_concentration for
    vars i_fNa and i_fNa;
    vars Nai and Nai;
  enddef;
  def map between hyperpolarising_activated_current and extracellular_sodium_concentration for
    vars Nao and Nao;
  enddef;
  def map between calcium_background_current and extracellular_calcium_concentration for
    vars Cao and Cao;
  enddef;
  def map between time_dependent_potassium_current and extracellular_potassium_concentration for
    vars Kc and Kc;
    vars i_K and i_K;
  enddef;
  def map between time_dependent_potassium_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between time_independent_potassium_current and extracellular_potassium_concentration for
    vars Kc and Kc;
    vars i_K1 and i_K1;
  enddef;
  def map between sodium_background_current and intracellular_sodium_concentration for
    vars i_Na_b and i_Na_b;
  enddef;
  def map between calcium_background_current and intracellular_calcium_concentration for
    vars i_Ca_b and i_Ca_b;
    vars Cai and Cai;
  enddef;
  def map between sodium_potassium_pump and extracellular_potassium_concentration for
    vars i_p and i_p;
    vars Kc and Kc;
  enddef;
  def map between sodium_potassium_pump and intracellular_sodium_concentration for
    vars i_p and i_p;
    vars Nai and Nai;
  enddef;
  def map between Na_Ca_exchanger and extracellular_sodium_concentration for
    vars Nao and Nao;
  enddef;
  def map between Na_Ca_exchanger and extracellular_calcium_concentration for
    vars Cao and Cao;
  enddef;
  def map between Na_Ca_exchanger and intracellular_sodium_concentration for
    vars n_NaCa and n_NaCa;
    vars i_NaCa and i_NaCa;
    vars Nai and Nai;
  enddef;
  def map between Na_Ca_exchanger and intracellular_calcium_concentration for
    vars n_NaCa and n_NaCa;
    vars i_NaCa and i_NaCa;
    vars Cai and Cai;
  enddef;
  def map between fast_sodium_current and intracellular_sodium_concentration for
    vars i_Na and i_Na;
    vars Nai and Nai;
  enddef;
  def map between fast_sodium_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between fast_sodium_current and extracellular_potassium_concentration for
    vars Kc and Kc;
  enddef;
  def map between fast_sodium_current and extracellular_sodium_concentration for
    vars Nao and Nao;
  enddef;
  def map between second_inward_current and intracellular_calcium_concentration for
    vars i_siCa and i_siCa;
    vars Cai and Cai;
  enddef;
  def map between second_inward_current and extracellular_calcium_concentration for
    vars Cao and Cao;
  enddef;
  def map between second_inward_current and extracellular_sodium_concentration for
    vars Nao and Nao;
  enddef;
  def map between second_inward_current and extracellular_potassium_concentration for
    vars i_siK and i_siK;
    vars Kc and Kc;
  enddef;
  def map between second_inward_current and intracellular_sodium_concentration for
    vars i_siNa and i_siNa;
    vars Nai and Nai;
  enddef;
  def map between second_inward_current and intracellular_potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between hyperpolarising_activated_current and hyperpolarising_activated_current_y_gate for
    vars y and y;
    vars time and time;
    vars V and V;
  enddef;
  def map between time_dependent_potassium_current and time_dependent_potassium_current_x_gate for
    vars x and x;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_m_gate for
    vars m and m;
    vars time and time;
    vars V and V;
  enddef;
  def map between fast_sodium_current and fast_sodium_current_h_gate for
    vars h and h;
    vars time and time;
    vars V and V;
  enddef;
  def map between second_inward_current and second_inward_current_d_gate for
    vars d and d;
    vars time and time;
    vars V and V;
  enddef;
  def map between second_inward_current and second_inward_current_f_gate for
    vars f and f;
    vars time and time;
    vars V and V;
  enddef;
  def map between second_inward_current and second_inward_current_f2_gate for
    vars f2 and f2;
    vars time and time;
    vars V and V;
    vars Cai and Cai;
  enddef;
  def map between intracellular_sodium_concentration and intracellular_calcium_concentration for
    vars Vi and Vi;
  enddef;
  def map between intracellular_sodium_concentration and intracellular_potassium_concentration for
    vars Vi and Vi;
  enddef;
  def map between extracellular_potassium_concentration and intracellular_potassium_concentration for
    vars i_mK and i_mK;
  enddef;
enddef;
